MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Dokumente und Einstellungen\Admin\Eigene Dateien\MATLAB\drivers\srs_sr430.mdd
DriverType: MATLAB interface object
InstrumentType: Scaler
InstrumentManufacturer: Stanford Research Systems
InstrumentModel: SR 430
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: ERRE?

CreateInitCode
  Code:
    function init(obj)
    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
    % Get the interface object and disconnect from instrument.
    g = obj.Interface;
    fclose(g);

ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property BinClock
    Type: InstrumentCommand
    ConfigureCommand: BCLK
    QueryCommand: BCLK?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property BinsPerRecord
    Type: InstrumentCommand
    ConfigureCommand: BREC
    QueryCommand: BREC?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property BinWidth
    Type: InstrumentCommand
    ConfigureCommand: BWTH
    QueryCommand: BWTH?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property DiscrSlope
    Type: InstrumentCommand
    ConfigureCommand: DCSL
    QueryCommand: DCSL?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property DiscrThreshLevel
    Type: InstrumentCommand
    ConfigureCommand: DCLV
    QueryCommand: DCLV?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property RecordsPerScan
    Type: InstrumentCommand
    ConfigureCommand: RSCN
    QueryCommand: RSCN?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property TriggerLevel
    Type: InstrumentCommand
    ConfigureCommand: TRLV
    QueryCommand: TRLV?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property TriggerOffset
    Type: InstrumentCommand
    ConfigureCommand: BOFF
    QueryCommand: BOFF?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property TriggerSlope
    Type: InstrumentCommand
    ConfigureCommand: TRSL
    QueryCommand: TRSL?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method clear
    Type: InstrumentCommand
    Line Command="CLRS" Output="false"
    Description: The CLRS command resets the unit to the CLEAR state. All data accu-
      mulated will be lost and reset to zero. The CLRS command may be used
      at any time, even while a scan is in progress. The effect is the same as
      pressing the [STOP] key twice in succession.

  Method getBinWidth
    MCode:
      function binWidth = getBinWidth(obj)
      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
      % Define possible bin widths in nanoseconds
      binWidths = [
          5
          40
          80
          160
          320
          640
          1280
          2560
          5120
          10240
          20480
          40960
          81920
          163840
          327680
          655360
          1310700
          2621400
          5242900
          10486000];

      % Get the bin width integer from the instrument (0 corresponds to 5 ns, 1
      % to 40 ns, etc.)
      binWidthIdx = obj.BinWidth;

      % Get bin width in nanoseconds (Matlab indices start with 1)
      binWidth = binWidths( binWidthIdx+1 );

  Method getData
    MCode:
      function processedData = getData(obj)
      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
      % Get Interface
      g = obj.Interface;
      fclose(g);

      % Get bins per record
      binsPerRecord = obj.BinsPerRecord*1024;

      % Original Buffer Size
      origBufferSize = g.InputBufferSize;

      % Buffer size must match exactly the number of bytes that are returned plus
      % the last line feed.
      newBufferSize = binsPerRecord*2;

      % Close the interface
      fclose(g);
      % Set new buffer size
      g.InputBufferSize = newBufferSize;

      % Reestablish connection
      %g = gpib('ni',0,8);
      %obj = icdevice('srs_sr430.mdd', g);
      connect(obj);

      % Read data
      data = invoke( obj, 'readData' );

      % Close the interface
      fclose(g);
      % Reset Buffer Size
      g.InputBufferSize = origBufferSize;

      % Process the data
      % The data is sent low byte first and the high byte after that
      processedData = zeros( 1,numel( data )/2 );
      for i=1:numel( processedData )
          processedData(i) = data(i*2-1) + data(i*2)*10;
      end

  Method pauseScan
    Type: InstrumentCommand
    Line Command="PAUS" Output="false"
    Description: The PAUS command pauses a scan in progress. If a scan is not in
      progress, the PAUS command is ignored. This is the same as pressing
      the [STOP] key while a scan is in progress. The unit will be in the
      PAUSE state.

  Method readData
    Type: InstrumentCommand
    Line Command="BINB?" Format="uint8" Output="true" ReadOutputAs="Binary"

  Method scanStatus
    Type: InstrumentCommand
    Line Command="SCAN?" Format="numeric" Output="true" ReadOutputAs="ASCII"
    Description: The SCAN? query reads the number of records which have been accu-
      mulated so far.  A host program can use the SCAN? query to determine
      when a scan is finished. (The status bytes may also be used).

  Method startScan
    Type: InstrumentCommand
    Line Command="SSCN" Output="false"
    Description: The SSCN command has the same effect as pressing the [START] key.
      The SSCN command only has an effect when the unit is paused or clear.
